PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = SLangexp
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Routines
  Routine loading_phrases
    CodeComponent reading_file
      Code Type = Both
      Begin Experiment:
        condList = []
      Begin JS Experiment:
        condList = [];
      Begin JS Routine:
        condList.append([n, cond, word1, word2, word3, word4, word5, word6, word7, word8, word9, target, length, trigger, correctKey, targetPos]);
      Begin Routine:
        condList.append([n, cond, word1, word2, word3, word4, word5, word6, word7, word8, word9, target, length, trigger, correctKey, targetPos])
  Routine fixation
    CodeComponent code_trial
      Code Type = Both
      Begin Experiment:
        aux_word = []
      Begin JS Experiment:
        aux_word = []
      Begin JS Routine:
        nWord = -1
        nTrial = nTrial + 1;
        nRow = nRow + 1;
        console.log(nRow)
        totalWords = condList[nRow][lengthCol];
        corrAns = condList[nRow][corrAnsCol];
        //console.log(totalWords)
        //console.log(condList[nRow][0]);
        //console.log(corrAns)

        aux_word = [];
        for (var i = 0, _pj_a = Number.parseInt((totalWords - 1)); (i < _pj_a); i += 1) {
            aux_word.append(condList[nRow][(i + 2)]);
        }
        aux_word.append(condList[nRow][targetCol]);

        //console.log(aux_word)
      Begin Routine:
        nWord = -1
        nTrial = nTrial + 1;
        nRow = nRow + 1

        totalWords = condList[trials.thisN][lengthCol]

        corrAns = condList[trials.thisN][corrAnsCol]
        print(corrAns)

        #print(condList[trials.thisN][0])

        aux_word = []
        for i in range(int(totalWords - 1)):
            aux_word.append(condList[trials.thisN][i+2])

        aux_word.append(condList[trials.thisN][targetCol])

        print(aux_word)
    TextComponent fix_txt
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent fix_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent setting_intertrial
      Code Type = Both
      Begin JS Routine:
        nInter = (nInter + 1);
        if ((nInter === auxInter.length)) {
            shuffle(auxInter);
            nInter = 0;
        }

        interDur = auxInter[nInter];

        console.log(interDur);
      Begin Routine:
        nInter = nInter + 1
        if nInter == len(auxInter):
            random.shuffle(auxInter)
            nInter = 0

        interDur = auxInter[nInter]

        print(interDur)
  Routine words
    CodeComponent code_w
      Code Type = Both
      Begin JS Routine:
        nWord = nWord + 1
        word = aux_word[nWord];

        // adding presented item to the output
        words_loop.addData("item", word)

        // adding a 1 to column target to the output
        // when the key word is presented
        if (((nWord + 1) === condList[nRow][keyword])) {
            words_loop.addData("keyWord", 1);
        }

        //console.log(condList[nRow][11]);
        //console.log(nWord + 1);
      Begin Routine:
        word = aux_word[words_loop.thisN]

        # adding presented item to the output
        words_loop.addData("item", word)

        # adding a 1 to column target to the output
        # when the key word is presented
        if (words_loop.thisN + 1) == condList[trials.thisN][keyword]:
            words_loop.addData("keyWord", 1)
    TextComponent word_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent words_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setting_parameters
    CodeComponent setting_p
      Code Type = Both
      Begin Experiment:
        import random

        event.Mouse(visible = False)

        trialsTraining = 4

        # dimensions elements of rating
        dimS = 0.1
        colorS = 'blue'
        fontS = 0.05
        colorN = 'white'
        xPos1 = -0.3
        xPos2 = -0.15
        xPos3 = 0
        xPos4 = -0.5
        yPos = -0.05
      Begin JS Experiment:
        document.body.style.cursor='none';

        trialsTraining = 4;

        // dimensions elements of rating
        dimS = 0.1;
        colorS = 'blue';
        fontS = 0.05;
        colorN = 'white';
        xPos1 = -0.3;
        xPos2 = -0.15;
        xPos3 = 0;
        xPos4 = -0.5;
        yPos = 0;
      Begin JS Routine:
        // TASK PARAMETERS
        // ---------------

        totalTrials = condList.length;
        console.log(totalTrials);
        word = "";

        // variable that takes the length of
        // each sentence
        totalWords = 0;

        // variable that takes the length column
        lengthCol = 12;

        // variable that takes the correct answer column
        corrAnsCol = 14;

        // variable that takes the target word
        targetCol = 11;

        // variable that takes the keyword position
        keyword = 15

        corrAns = [];

        // counters
        nTrial = 0;
        nRow = -1;
        nWord = -1;
        nInter = -1;
        nPausa = 12;

        // array of possible intertrial durations
        auxInter = [0.75, 1, 1.25, 1.5, 1.75, 2];
        shuffle(auxInter);
        interDur = 0;

        modePausa = false;
        modeInter = true;
        modePract = false;
      Begin Routine:
        # TASK PARAMETERS
        # ---------------

        totalTrials = len(condList)
        word = ''

        # variable that takes the length of
        # each sentence
        totalWords = 0

        # variable that takes the length column
        lengthCol = 12

        # variable that takes the correct answer column
        corrAnsCol = 14

        # variable that takes the target word
        targetCol = 11

        # variable that takes the keyword position
        keyword = 15

        corrAns = []

        # counters
        nTrial = 0;
        nRow = -1;
        nWord = -1;
        nInter = -1;
        nPausa = 12;

        # array of possible intertrial durations
        auxInter = [0.75, 1, 1.25, 1.5, 1.75, 2]
        random.shuffle(auxInter)
        interDur = 0

        modePausa = False
        modeInter = True
        modePract = False
    CodeComponent code_seq
      Code Type = Both
      Begin Experiment:
        aux = []
        aux_cond = []
      Begin JS Experiment:
        aux = [];
        aux_cond = [];
      Begin JS Routine:
        aux = condList.slice(trialsTraining);
        shuffle(aux);
        for (let k = 0; k < aux.length; k++){
                    condList[trialsTraining + k] = aux[k];
                }

        kk = 0;
        i = trialsTraining + 2;
        while ((i <= (totalTrials - 1))) {
             aux = [];
            if (((condList[i][1] === condList[(i - 1)][1]) && (condList[i][1] === condList[(i - 2)][1]))) {
                aux = condList.slice(i);
                shuffle(aux);

                for (let k = 0; k < aux.length; k++){
                    condList[i + k] = aux[k];
                }
                kk = (kk + 1);
                i = (i - 1);
            } else {
                kk = 0;
            }
            if ((kk > 10)) {
                aux = condList.slice(trialsTraining);
                shuffle(aux);
                for (let k = 0; k < aux.length; k++){
                    condList[trialsTraining + k] = aux[k];
                }
                i = (trialsTraining  - 1);
            }
            i = (i + 1);
        }
      Begin Routine:
        # print(condList)
        aux = condList[trialsTraining:]
        random.shuffle(aux)
        condList[trialsTraining:] = aux[:]
        kk = 0
        i = trialsTraining + 2
        while i <= totalTrials - 1:
            #print(i)
            '''
            print(i)
            print(condList[i][1])
            print(condList[i-1][1])
            print(condList[i-2][1])
            '''
            aux = []
            if condList[i][1] == condList[i-1][1] and condList[i][1] == condList[i-2][1]:
                aux = condList[i:]
                random.shuffle(aux)
                condList[i:] = aux[:]
                kk = kk + 1
                i = i- 1
            else:
                kk = 0

            if kk > 10:
                aux = condList[trialsTraining:]
                random.shuffle(aux)
                condList[trialsTraining:] = aux[:]
                i = trialsTraining - 1

            i = i + 1

        # for i in range(totalTrials):
        #    print(condList[i][0])

        # print(condList)
  Routine start
    TextComponent start_txt
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenido!

        A continuación vas a leer unas frases y tendrás que decidir si son correctas o no.

        En la pantalla aparecerá solo una palabra a la vez. Para ir leyendo la frase, pulsa la barra espaciadora y e irán apareciendo las siguientes palabras de la frase. Lee a la velocidad que leerías naturalmente.

        Cuando la frase haya terminado, te preguntaremos si la frase que acabas de leer es correcta o no. Pulsa la tecla de la letra Q para indicar que SÍ y la tecla de la letra P para indicar que NO. Intenta responder lo más rápido que puedas, sin reflexionarlo mucho. Los errores que detectes pueden ser tanto de forma (que las frases no estén bien construidas) como de contenido (que tengan significados absurdos o imposibles).

        Después, aparecerá una escala del 1 al 5 para que valores tu nivel de seguridad en tu respuesta, siendo 5 MUY SEGURO y 1 NADA SEGURO.

        Vamos a empezar con una práctica. Pulsa la barra espaciadora para empezar. Cuando aparezca este símbolo +, pulsa la barra espaciadora.
    KeyboardComponent key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
    ImageComponent wait_img
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine setting_word
    CodeComponent code_s
      Code Type = Both
      Begin JS Routine:
        word = aux_word[nRow];
      Begin Routine:
        word = aux_word[words_loop.thisN]
  Routine setting_JS
    CodeComponent code_JS
      Code Type = Both
      Begin JS Experiment:
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        webbrowser = window;
        random = Math.random;

        randint = function(min, maxplusone){
         return Math.floor(Math.random()*
                (maxplusone - min)) + min;
        }
  Routine intertrial
    ImageComponent inter_img
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $interDur
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  Routine question
    TextComponent item_check
      color = black
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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      text:
        ¿Era correcta la frase anterior?
    KeyboardComponent question_resp
      allowedKeys = 'p','q'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    PolygonComponent yes_rect
      fillColor = $[1,1,1]
      pos = (-0.15, 0)
      shape = rectangle
      size = (0.125, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent no_rect
      fillColor = $[1,1,1]
      pos = (0.15, 0)
      shape = rectangle
      size = (0.125, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent yes
      color = black
      letterHeight = 0.03
      pos = (-0.15, 0)
      startVal [time (s)] = 0.0
      text = SÍ
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    TextComponent no
      color = black
      letterHeight = 0.03
      pos = (0.15, 0)
      startVal [time (s)] = 0.0
      text = NO
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    CodeComponent code_q
      Code Type = Both
      Begin Experiment:
        auxOut1 = []
        auxOut2 = []
      Begin JS Experiment:
        auxOut1 = [];
        auxOut2 = [];
      Begin JS Routine:
        auxOut1 = condList[nRow][0];
        trials.addData("nSent", auxOut1);
        auxOut2 = condList[nRow][1];
        trials.addData("condition", auxOut2);
      Begin Routine:
        auxOut1 = condList[nRow][0]
        trials.addData("nSent", auxOut1)
        auxOut2 = condList[nRow][1]
        trials.addData("condition", auxOut2)
  Routine rating
    TextComponent rating_question
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Grado de seguridad de tu respuesta
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    PolygonComponent rect1
      fillColor = $colorS
      lineColor = $colorS
      pos = (xPos1, yPos)
      shape = rectangle
      size = (dimS, dimS)
      startVal [time (s)] = 0.0
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    PolygonComponent rect2
      fillColor = $colorS
      lineColor = $colorS
      pos = (xPos2, yPos)
      shape = rectangle
      size = (dimS, dimS)
      startVal [time (s)] = 0.0
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    PolygonComponent rect3
      fillColor = $colorS
      lineColor = $colorS
      pos = (xPos3, yPos)
      shape = rectangle
      size = (dimS, dimS)
      startVal [time (s)] = 0.0
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    PolygonComponent rect4
      fillColor = $colorS
      lineColor = $colorS
      pos = (-xPos2, yPos)
      shape = rectangle
      size = (dimS, dimS)
      startVal [time (s)] = 0.0
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    PolygonComponent rect5
      fillColor = $colorS
      lineColor = $colorS
      pos = (-xPos1, yPos)
      shape = rectangle
      size = (dimS, dimS)
      startVal [time (s)] = 0.0
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    TextComponent g1
      color = $colorN
      letterHeight = fontS
      pos = (xPos1, yPos)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent g2
      color = $colorN
      letterHeight = fontS
      pos = (xPos2, yPos)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent g3
      color = $colorN
      letterHeight = fontS
      pos = (xPos3, yPos)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent g4
      color = $colorN
      letterHeight = fontS
      pos = (-xPos2, yPos)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent g5
      color = $colorN
      letterHeight = fontS
      pos = (-xPos1, yPos)
      startVal [time (s)] = 0.0
      text = 5
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    KeyboardComponent rating_resp
      allowedKeys = '1','2','3','4','5',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent check_pausa
      Code Type = Both
      End JS Routine:
        // checking end of training
        if ((nRow === trialsTraining - 1)) {
            modePract = true;
            nTrial = 0;
        }

        // checking pause
        if ((nTrial > 1)) {
            if (((nTrial % nPausa) === 0)) {
                pausa_msg = 'PAUSA';
                modePausa = true;
            }
        }

        // checking end of task
        if ((nRow === condList.length - 1)){
             pausa_msg = '¡Ya has acabado!\nGracias por tu participación.\n\n Pulsa la barra de ESPACIO para acabar';
             modePausa = true;
             modeInter = false;
        }
      End Routine:
        # checking end of training
        if trials.thisN == (trialsTraining - 1):
            modePract = True
            nTrial = 0

        # checking pause
        if nTrial > 1:
            if nTrial % nPausa == 0:
                pausa_msg = 'PAUSA'
                modePausa = True

        # checking end of task
        if trials.thisN == len(condList)-1:
            pausa_msg = '¡Ya has acabado!\nGracias por tu participación.\n\n Pulsa la barra de ESPACIO para acabar'
            modePausa = True
            modeInter = False
    TextComponent NadaSeguro
      color = black
      letterHeight = 0.04
      pos = (xPos4, yPos)
      startVal [time (s)] = 0.0
      text = Nada seguro
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    TextComponent MuySeguro
      color = black
      letterHeight = 0.04
      pos = (-xPos4, yPos)
      startVal [time (s)] = 0.0
      text = Muy seguro
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  Routine pausa
    TextComponent pausa_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 1
      text [set every repeat] = $pausa_msg
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    KeyboardComponent pausa_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent reset_pausa
      Code Type = Auto->JS
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      End Routine:
        modePausa = False
  Routine inter_pausa
    ImageComponent inter
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine check_pract
    TextComponent pract_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 1.0
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      text:
        Has acabado la práctica.

        Pulsa la barra de espacio para empezar la tarea.

        Cada ciertas frases tendrás una PAUSA en la que podrás tomarte unos segundos. Continúa enseguida que estés listo.
    KeyboardComponent pract_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent code_pract
      Code Type = Auto->JS
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      End Routine:
        modePract = False
Flow
  Routine setting_JS
  LoopInitiator load loopType="TrialHandler"
    conditionsFile = pilot_list1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('n', 0), ('cond', 'prac_correct'), ('word1', 'Juan'), ('word2', 'vuelve'), ('word3', 'de '), ('word4', 'la'), ('word5', 'biblioteca'), ('word6', 'en '), ('word7', None), ('word8', None), ('word9', None), ('target', 'bici'), ('length', 7), ('trigger', 1), ('correctKey', 'q'), ('targetPos', 7)]),
      OrderedDict([('n', 0), ('cond', 'prac_semantic'), ('word1', 'Mi'), ('word2', 'amigo'), ('word3', 'se'), ('word4', 'bebe'), ('word5', 'una'), ('word6', 'puerta'), ('word7', 'por '), ('word8', 'las'), ('word9', None), ('target', 'tardes'), ('length', 9), ('trigger', 2), ('correctKey', 'p'), ('targetPos', 6)]),
      OrderedDict([('n', 0), ('cond', 'prac_sem-syn'), ('word1', 'Hace'), ('word2', 'dos'), ('word3', 'años'), ('word4', 'el'), ('word5', 'gorrión'), ('word6', 'vuelve'), ('word7', 'al'), ('word8', None), ('word9', None), ('target', 'limonero'), ('length', 8), ('trigger', 3), ('correctKey', 'p'), ('targetPos', 6)]),
      OrderedDict([('n', 0), ('cond', 'prac_syntactic'), ('word1', 'Han '), ('word2', 'crecido'), ('word3', 'flores'), ('word4', 'en '), ('word5', 'la'), ('word6', 'calles'), ('word7', 'del'), ('word8', None), ('word9', None), ('target', 'pueblo'), ('length', 8), ('trigger', 4), ('correctKey', 'p'), ('targetPos', 6)])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
    Routine loading_phrases
  LoopTerminator load
  Routine setting_parameters
  Routine start
  Routine wait
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = totalTrials
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    Routine fixation
    LoopInitiator words_loop loopType="TrialHandler"
      loopType = sequential
      nReps = totalWords
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      Routine words
    LoopTerminator words_loop
    Routine question
    Routine rating
    LoopInitiator checkPausa loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = modePausa
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      Routine pausa
    LoopTerminator checkPausa
    LoopInitiator checkPract loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = modePract
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      Routine check_pract
    LoopTerminator checkPract
    LoopInitiator interLoop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = modeInter
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      Routine intertrial
    LoopTerminator interLoop
  LoopTerminator trials
