PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = sounddevice
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = practica_temps_lectura
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Routines
  Routine loading_phrases
    CodeComponent readingF
      Code Type = Py
      Begin Experiment:
        condList = []
        corrAns = []
      Begin Routine:
        condList.append([nSent, stim, cond, length, onset_keyw_2, onset_keyw_1, onset_keyw, onset_keyw_plus1, onset_endingw, corrAns])
  Routine main
    TextComponent fix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixDur
      text = +
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    SoundComponent stim_phrase
      hamming = False
      sound [set every repeat] = $soundF
      startVal [time (s)] = delayFix
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    ParallelOutComponent keyw_2
      address = 0xC100
      startData = trig_keyw_2
      startVal [time (s)] = onset_keyw_2
      stopData = 0
      stopVal [duration (s)] = pulseDur
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent keyw_1
      address = 0xC100
      startData = trig_keyw_1
      startVal [time (s)] = onset_keyw_1
      stopData = 0
      stopVal [duration (s)] = pulseDur
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent keyw
      address = 0xC100
      startData = trig_keyw
      startVal [time (s)] = onset_keyw
      stopData = 0
      stopVal [duration (s)] = pulseDur
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent keyw_plus1
      address = 0xC100
      startData = trig_keyw_plus1
      startVal [time (s)] = onset_keyw_plus1
      stopData = 0
      stopVal [duration (s)] = pulseDur
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent endingw
      address = 0xC100
      startData = trig_endingw
      startVal [time (s)] = onset_endingw
      stopData = 0
      stopVal [duration (s)] = pulseDur
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent port_onset_stim
      address = 0xC100
      startData = trig_onset_stim
      startVal [time (s)] = fixDur
      stopData = 0
      stopVal [duration (s)] = pulseDur
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent port_fix
      address = 0xC100
      startData = trig_fix
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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  Routine setting_parameters
    CodeComponent setting_p
      Code Type = Py
      Begin Experiment:
        import random

        event.Mouse(visible = False)

        # sentence file
        soundF = ''

        # variables for the onsets of words
        onset_keyw_2 = 0
        onset_keyw_1 = 0
        onset_keyw = 0
        onset_keyw_plus1 = 0
        onset_endingw = 0

        pausa_msg = ''

        # trigger pulse duration
        pulseDur = 0.01
      Begin Routine:
        # TASK PARAMETERS
        # ---------------

        totalTrials = len(condList)

        # triggers
        trig_start = 99
        trig_fix = 100
        trig_keyw_2 = 10
        trig_keyw_1 = 20
        trig_keyw = 30
        trig_keyw_plus1 = 40
        trig_endingw = 50
        trig_question = 60
        trig_blink = 88
        trig_pausa = 121

        corrAns = []

        # counters
        nTrial = 0
        nRow = -1
        nInter = -1
        nPausa = 12

        # stim durations
        start_q = 0.5 # blank period before question
                      # blank period before blink window
        delayFix = 0.5 # duration of silence before onset audio stim with fixation on screen
        blinkDur = 1.0 # blink window

        # array of possible intertrial durations
        auxInter = [1.5, 1.75, 2, 2.25, 2.5]
        interDur = 0

        modePausa = False
        modeInter = True
    CodeComponent code_seq
      Code Type = Py
      Begin Experiment:
        aux = []
        aux_cond = []
      Begin Routine:
        # print(condList)
        random.shuffle(condList)

        kk = 0
        i = 2
        while i <= totalTrials - 1:
            #print(i)
            '''
            print(i)
            print(condList[i][1])
            print(condList[i-1][1])
            print(condList[i-2][1])
            '''
            aux = []
            if condList[i][1] == condList[i-1][1] and condList[i][1] == condList[i-2][1]:
                aux = condList[i:]
                random.shuffle(aux)
                condList[i:] = aux[:]
                kk = kk + 1
                i = i- 1
            else:
                kk = 0

            if kk > 10:
                random.shuffle(condList)
                i = 1

            i = i + 1

        #for i in range(totalTrials):
        #    print(condList[i][0])

        # print(condList)
  Routine question
    TextComponent item_check
      color = black
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = start_q
      text = ¿Era correcta la frase anterior?
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    KeyboardComponent question_resp
      allowedKeys = 'p','q'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = start_q
      storeCorrect = True
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    PolygonComponent yes_rect
      fillColor = $(0.9216, 0.9216, 0.7255)
      lineColor = $(0.9216, 0.9216, 0.7255)
      pos = (-0.15, 0)
      shape = rectangle
      size = (0.125, 0.05)
      startVal [time (s)] = start_q
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    PolygonComponent no_rect
      fillColor = $(0.9216, 0.9216, 0.7255)
      lineColor = $(0.9216, 0.9216, 0.7255)
      pos = (0.15, 0)
      shape = rectangle
      size = (0.125, 0.05)
      startVal [time (s)] = start_q
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    TextComponent yes
      color = black
      letterHeight = 0.03
      pos = (-.15, 0)
      startVal [time (s)] = start_q
      text = Sí
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    TextComponent no
      color = black
      letterHeight = 0.03
      pos = (0.15, 0)
      startVal [time (s)] = start_q
      text = No
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    CodeComponent code_question
      Code Type = Py
      Begin Experiment:
        auxOut1 = []
        auxOut2 = []
      Begin Routine:
        auxOut1 = condList[nRow][0]
        trials.addData("nSent", auxOut1)
        auxOut2 = condList[nRow][1]
        trials.addData("condition", auxOut2)
    ParallelOutComponent port_q
      address = 0xC100
      startData = trig_question
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = pulseDur
      syncScreen = True
      syncScreenRefresh = False
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  Routine blink
    TextComponent blink_txt
      color = black
      letterHeight = 0.1
      startVal [time (s)] = start_q
      stopVal [duration (s)] = blinkDur
      text = ****
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    CodeComponent code_pausa
      Code Type = Py
      Begin Routine:
        # checking pause
        if nTrial > 1:
            if nTrial % nPausa == 0:
                pausa_msg = 'PAUSA'
                modePausa = True


        # checking end of task
        if trials.thisN == len(condList)-1:
            pausa_msg = '¡Ya has acabado!\nGracias por tu participación.\n\n Pulsa la barra de ESPACIO salir'
            modePausa = True
            modeInter = False
    ParallelOutComponent port_blink
      address = 0xC100
      startData = trig_blink
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = pulseDur
      syncScreen = True
      syncScreenRefresh = False
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  Routine intertrial
    ImageComponent inter_img
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = interDur
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  Routine pausa
    TextComponent pausa_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = start_q
      text [set every repeat] = $pausa_msg
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    KeyboardComponent pausa_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = start_q
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    CodeComponent reset_pausa
      Code Type = Py
      End Routine:
        modePausa = False
    ParallelOutComponent port_pausa
      address = 0xC100
      startData = trig_pausa
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = pulseDur
      syncScreen = True
      syncScreenRefresh = False
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  Routine start
    TextComponent start_txt
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        INSTRUCCIONES

        Ahora vas a oír unas frases. Escúchalas con atención. Después de cada frase aparecerá la pregunta '¿Era correcta la frase anterior?'

        Pulsa la tecla Q para indicar que SÍ y la tecla P para indicar que NO.

        Es importante que mientras escuchas la frase no parpadees y fijes tu mirada en la cruz que aparecerá en el centro de la pantalla.

        Vamos a emplezar con una práctica.

        Pulsa la barra espaciadora para empezar.
    KeyboardComponent start_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent port_start
      address = 0xC100
      startData = trig_start
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = pulseDur
      syncScreen = True
      syncScreenRefresh = False
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  Routine wait
    ImageComponent wait_img
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine setting_trial
    CodeComponent code_main
      Code Type = Auto->JS
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      Begin Routine:
        nTrial = nTrial + 1
        nRow = nRow + 1

        # setting the stim to present
        soundF = condList[trials.thisN][1]

        soundDur = condList[trials.thisN][3]
        fixDur = delayFix + soundDur

        print(soundF)
        print(fixDur)


        onset_keyw_2 = delayFix + condList[trials.thisN][4]
        onset_keyw_1 = delayFix + condList[trials.thisN][5]
        onset_keyw = delayFix + condList[trials.thisN][6]
        onset_keyw_plus1 = delayFix + condList[trials.thisN][7]
        onset_endingw = delayFix + condList[trials.thisN][8]

        trig_onset_stim = condList[trials.thisN][3]

        # setting the correct answer for this trials
        corrAns = condList[trials.thisN][9]

        # setting intertrial duration
        random.shuffle(auxInter)
        interDur = auxInter[0]
  Routine end_training
    TextComponent end_t
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        El entrenamiento se ha acabado.
Flow
  LoopInitiator load loopType="TrialHandler"
    conditionsFile = Trigers_Práctica.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'nSent': 1, 'stim': 'Prac1_corr.wav', 'cond': 0, 'length': 3.325, 'onset_keyw_2': 1.162, 'onset_keyw_1': 1.747, 'onset_keyw': 2.052, 'onset_keyw_plus1': 2.545, 'onset_endingw': 2.688, 'corrAns': 1},
      {'nSent': 2, 'stim': 'Prac2_corr.wav', 'cond': 0, 'length': 2.684, 'onset_keyw_2': 0.963, 'onset_keyw_1': 1.23, 'onset_keyw': 1.368, 'onset_keyw_plus1': 1.739, 'onset_endingw': 1.972, 'corrAns': 1},
      {'nSent': 3, 'stim': 'Prac3_sem.wav', 'cond': 0, 'length': 4.104, 'onset_keyw_2': 2.118, 'onset_keyw_1': 2.481, 'onset_keyw': 2.619, 'onset_keyw_plus1': 3.239, 'onset_endingw': 3.503, 'corrAns': 2},
      {'nSent': 4, 'stim': 'Prac4_semsyn.wav', 'cond': 0, 'length': 2.372, 'onset_keyw_2': 0.576, 'onset_keyw_1': 0.953, 'onset_keyw': 1.091, 'onset_keyw_plus1': 1.532, 'onset_endingw': 1.597, 'corrAns': 2},
      {'nSent': 5, 'stim': 'Prac5_semsyn.wav', 'cond': 0, 'length': 2.391, 'onset_keyw_2': 0.573, 'onset_keyw_1': 0.7, 'onset_keyw': 1.218, 'onset_keyw_plus1': 1.695, 'onset_endingw': 1.956, 'corrAns': 2},
      {'nSent': 6, 'stim': 'Prac6_syn.wav', 'cond': 0, 'length': 3.517, 'onset_keyw_2': 1.646, 'onset_keyw_1': 1.764, 'onset_keyw': 2.03, 'onset_keyw_plus1': 2.685, 'onset_endingw': 2.821, 'corrAns': 2}]
    Routine loading_phrases
  LoopTerminator load
  Routine setting_parameters
  Routine start
  Routine wait
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = totalTrials
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    Routine setting_trial
    Routine main
    Routine question
    Routine blink
    LoopInitiator loopInter loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = modeInter
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      Routine intertrial
    LoopTerminator loopInter
  LoopTerminator trials
  Routine end_training
